PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TrainingTask_Test
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Irá iniciar a tarefa. A mesma consiste na apresentação de um contraste à direita/esquerda. Indique em cada trial o lado do estímulo utilizando a tecla -S- para o lado esquerdo e  -L- para o lado direito.

        Pedimos que mantenha o olhar no centro do ecrã durante a experiência

        Pressione a SPACEBAR para começar
    KeyboardComponent key_respWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
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    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Obrigado pela sua participação
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    KeyboardComponent keySideGoodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine Blank4000
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    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine FullTaskTrials
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  Routine InstructionsFull
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    TextComponent textFull
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Explicação para full task
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    KeyboardComponent key_resp_Full
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PreTest1Trials
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    SoundComponent soundGoCue
      forceEndRoutine = False
      sound [set every repeat] = 12000
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.08
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    PolygonComponent polygonVertical
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_width
      ori [set every frame] = 90
      pos [set every frame] = fixation_pos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    PolygonComponent polygonHorizontal
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_width
      ori [set every frame] = 180
      pos [set every frame] = fixation_pos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    GratingComponent gabor
      contrast [set every repeat] = grating
      mask [set every frame] = $mask
      ori [set every frame] = orientation
      phase [set every frame] = 0
      pos [set every frame] = position
      sf [set every frame] = spacial_freq
      size [set every frame] = size
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3.00
      tex [set every frame] = $texture
      texture resolution = 256
      units = deg
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    CodeComponent codePhase
      Code Type = Auto->JS
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      Begin Routine:
        # Generate random phase
        current_phase = np.random.uniform(0, 2 * np.pi)

        gabor.phase = current_phase

        # Creates a gabor phase column on the csv
        thisExp.addData('gabor_phase', current_phase)
    CodeComponent codeCorKey
      Code Type = Auto->JS
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      Begin Experiment:
        total_task_timer = core.Clock()
      Begin Routine:
        if position[0] > 0:
            correct_ans = "l"
        else:
            correct_ans = "s"
      End Routine:
        total_task_time = total_task_timer.getTime()
        print(f"TOTAL TASK TIME: {total_task_time:.2f} SECONDS\n")
    KeyboardComponent keySide
      allowedKeys = 's','l'
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 1.00
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine PreTest1TrialFeedback
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    CodeComponent codeFconditions
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0
      Begin Routine:
        if correct_ans == keySide.keys:
            score += 1
            if score == 50:
                text_feeback = f"Correto!\nNível Principiante\n50 pontos até ao próximo nível"
                win.color = "green"
                sound_feedback = 4000
                volume = 1
                duration = 0.5
            else:
                text_feedback = f"Correto!\n+1 point\nTotal: {score}"
                win.color = "green"
                sound_feedback = 4000
                volume = 1
                duration = 0.5
        else:
            score += 0
            text_feedback = f"Errado!\n+0 points\nTotal: {score}"
            win.color = "red"
            sound_feedback = 1000
            volume = 1
            duration = 1


        win.flip()
      End Routine:
        win.color="gray"
    TextComponent textFeedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
      text [set every frame] = $text_feedback
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    SoundComponent soundFeedback
      forceEndRoutine = False
      sound [set every repeat] = $sound_feedback 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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  Routine Pause
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    TextComponent textPause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 15
      text = Intervalo
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    TextComponent Returntotasktext
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 20
      text = Carrega na SPACEBAR para recomeçar
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 15
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  Routine Tutorial
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    SoundComponent soundTutGoCue
      forceEndRoutine = False
      sound [set every repeat] = 12000
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.08
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    PolygonComponent polygonHorizontalTut
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_widthT
      ori [set every frame] = 180
      pos [set every frame] = fixation_posT
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_sizeT
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    PolygonComponent polygonVerticalTut
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_widthT
      ori [set every frame] = 90
      pos [set every frame] = fixation_posT
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_sizeT
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    GratingComponent gaborTut
      contrast [set every repeat] = gratingT
      mask [set every frame] = $maskT
      ori [set every frame] = orientationT
      phase [set every frame] = 0
      pos [set every frame] = positionT
      sf [set every frame] = spacial_freqT
      size [set every frame] = sizeT
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      tex [set every frame] = $textureT
      texture resolution = 256
      units = deg
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    CodeComponent codePhaseT
      Code Type = Auto->JS
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      Begin Routine:
        # Generate random phase
        current_phaseT = np.random.uniform(0, 2 * np.pi)

        gaborTut.phase = current_phaseT

        # Creates a gabor phase column on the csv
        thisExp.addData('gabor_phaseT', current_phaseT)
    CodeComponent codeCorKeyTut
      Code Type = Auto->JS
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      Begin Routine:
        if positionT[0] > 0:
            correct_ans = "l"
        else:
            correct_ans = "s"
    KeyboardComponent keySideTut
      allowedKeys = 's','l'
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 1.00
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine InstructionsTutorial
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    TextComponent textTutorial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Irá realizar uma pequena sessão de treino.

        Quando o estímulo aparecer do lado direito pressione -L- e quando aparecer do lado esquerdo pressione -S-

        Estas respostas não serão contabilizadas.

        Pressione SPACEBAR para iniciar
    KeyboardComponent key_resp_tutorial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine TutFeedback
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    CodeComponent codeFcondTut
      Code Type = Auto->JS
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      Begin Routine:
        if correct_ans == keySideTut.keys:
            score += 1
            text_feedback = f"Correto!\n+1 point\nTotal: {score}"
            win.color = "green"
            sound_feedback = 4000
            volume = 1
            duration = 0.5
        else:
            score += 0
            text_feedback = f"Errado!\n+1 point\nTotal: {score}"
            win.color = "red"
            sound_feedback = 1000
            volume = 1
            duration = 1
      End Routine:
        win.color="gray"
    TextComponent textFBTut
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
      text [set every frame] = $text_feedback
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    SoundComponent soundFBTut
      forceEndRoutine = False
      sound [set every repeat] = $sound_feedback 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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  Routine InstructionsFullTask
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    TextComponent textFullTask
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Irá iniciar a tarefa completa.

        Quando o estímulo aparecer do lado direito pressione -L- e quando aparecer do lado esquerdo pressione -S-

        Pressione SPACEBAR para iniciar
    KeyboardComponent keyRespFullTask
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine pretest1Tutorial
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  Routine blank2000
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    TextComponent textBlankInst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine WelcomeScreen
  Routine blank2000
  Routine InstructionsTutorial
  LoopInitiator PreTest1TrialsTut loopType="TrialHandler"
    conditionsFile = Conditions_Tut.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'positionT': (30, 0), 'gratingT': 0.025, 'textureT': 'sin', 'maskT': 'gauss', 'phaseT': 3, 'spacial_freqT': 1, 'orientationT': 0, 'sizeT': (7, 7), 'fixation_posT': (0, 0), 'fixation_sizeT': (2, 0.1), 'fixation_widthT': 0.08},
      {'positionT': (-30, 0), 'gratingT': 0.025, 'textureT': 'sin', 'maskT': 'gauss', 'phaseT': 3, 'spacial_freqT': 1, 'orientationT': 0, 'sizeT': (7, 7), 'fixation_posT': (0, 0), 'fixation_sizeT': (2, 0.1), 'fixation_widthT': 0.08},
      {'positionT': (30, 0), 'gratingT': 1, 'textureT': 'sin', 'maskT': 'gauss', 'phaseT': 3, 'spacial_freqT': 1, 'orientationT': 0, 'sizeT': (7, 7), 'fixation_posT': (0, 0), 'fixation_sizeT': (2, 0.1), 'fixation_widthT': 0.08},
      {'positionT': (-30, 0), 'gratingT': 1, 'textureT': 'sin', 'maskT': 'gauss', 'phaseT': 3, 'spacial_freqT': 1, 'orientationT': 0, 'sizeT': (7, 7), 'fixation_posT': (0, 0), 'fixation_sizeT': (2, 0.1), 'fixation_widthT': 0.08}]
    Routine Tutorial
    Routine TutFeedback
  LoopTerminator PreTest1TrialsTut
  Routine Blank4000
  Routine InstructionsFullTask
  LoopInitiator Pretest1Block loopType="TrialHandler"
    loopType = sequential
    nReps = 15
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    LoopInitiator pretest1trialsTraining loopType="TrialHandler"
      conditionsFile = Conditions_parameters.xlsx
      loopType = random
      nReps = 2
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      conditions:
        [{'position': (30, 0), 'grating': 0, 'texture': 'sin', 'mask': 'gauss', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (-30, 0), 'grating': 0, 'texture': 'sin', 'mask': 'gauss', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (30, 0), 'grating': 0.02, 'texture': 'sin', 'mask': 'gauss', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (-30, 0), 'grating': 0.02, 'texture': 'sin', 'mask': 'gauss', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (30, 0), 'grating': 0.04, 'texture': 'sin', 'mask': 'gauss', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (-30, 0), 'grating': 0.04, 'texture': 'sin', 'mask': 'gauss', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
        {'position': (30, 0), 'grating': 0.08, 'texture': 'sin', 'mask': 'gauss', 'phase': 3, 'spacial_freq': 1, 'orientation': 0, 'size': (7, 7), 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08}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
      Routine PreTest1Trials
      Routine PreTest1TrialFeedback
    LoopTerminator pretest1trialsTraining
    Routine Pause
  LoopTerminator Pretest1Block
  Routine Blank4000
  Routine GoodbyeScreen
